PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'block_order': "['1','2']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = Self_matt
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for taking part in this experiment

        press space to continue
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent goodbye_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thanks for participating! 
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    KeyboardComponent goodbye_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_name
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  Routine instructions_name
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  Routine stimulus
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    CodeComponent fix_duration_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Fixation cross duration
        fixDurMin = 0.3 # minimum: 300 ms
        fixDurMax = 1 # maximum: 700 ms
      Begin Routine:
        fixDur = np.random.uniform(fixDurMin, fixDurMax) # random between minimum and maximum
        thisExp.addData('fixation_duration',fixDur) # document the duration in your logfile
    TextComponent fix
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    TextComponent stimuli
      color [set every repeat] = $color
      font [set every repeat] = $font
      letterHeight = 0.05
      startVal [condition] = fix.status==FINISHED
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'j', 'k', 'l'
      forceEndRoutine = True
      startVal [condition] = fix.status==FINISHED
      store = first key
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  Routine instructions
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    TextComponent text_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $ins
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    KeyboardComponent key_resp_instrucctions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine blank
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine preliminaries
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    CodeComponent assign_keymap_at_random_and_mk_instructions
      Code Type = Py
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      Begin Experiment:
        # choose one of 6 combinations of j,k,l mapping to redself; bluefriend; othergreen
        #redself   bluefriend  greenother
        #1=j              k                    l
        #2=j              l                     k
        #3=k             j                     l
        #4=k             l                     j
        #5=l              j                     k
        #6=l              k                    j

        # create strings from keymap for use in instructions
        #e.g., instr_1 = "press" + keymap1key1 + "for redself"




        import random
        mapping_number = random.randint(1,6)
        match mapping_number:
            case 1:
                redself    = "j"
                bluefriend = "k"
                greenother = "l"
            case 2:
                redself    = "j"
                bluefriend = "l"
                greenother = "k"
            case 3:
                redself    = "k"
                bluefriend = "j"
                greenother = "l"
            case 4:
                redself    = "k"
                bluefriend = "l"
                greenother = "j"
            case 5:
                redself    = "l"
                bluefriend = "j"
                greenother = "k"
            case 6:
                redself    = "l"
                bluefriend = "k"
                greenother = "j"
            case _:
                print("oops")

        instruct_color_condition = "In the following task, you will need to report the color of the word. \n- If the word is presented in blue, press " + bluefriend + "\n- If the word is presented in red, press " + redself + "\n- If the word is presented in green, press " + greenother + "\n\npress the space key to start"
        instruct_identity_condition = "In the following task, you will need to report the identity of the word.\n- If the word is self, press " + redself + "\n- If the word is friend, press " + bluefriend + "\n- If the word is other, press " + greenother + "\n\npress the space key to start"
    CodeComponent parse_block_order_from_gui
      Code Type = Auto->JS
    CodeComponent pull_fonts_in
      Code Type = Auto->JS
  Routine feedback
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    CodeComponent assign_feedback
      Code Type = Auto->JS
    CodeComponent conditionally_skip_feedback
      Code Type = Auto->JS
    TextComponent conditionally_put_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine pp_names_names
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    CodeComponent skip_for_now
      Code Type = Auto->JS
Flow
  Routine preliminaries
  Routine welcome
  Routine pp_names_names
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = lists/blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'color', 'ins': 'In the following task, you will need to report the color of the word. \n- If the word is presented in blue, press j\n- If the word is presented in red, press k\n- If the word is presented in green, press l\n\npress the space key to start'},
      {'task': 'identity', 'ins': 'In the following task, you will need to report the identity of the word. \n- If the word is self, press j\n- If the word is friend, press k\n- If the word is other, press l\n\npress the space key to start'}]
    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trial_list
      loopType = random
      nReps = 1
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      conditions:
        [{'word': 'self', 'color': 'red'},
        {'word': 'friend', 'color': 'blue'},
        {'word': 'other', 'color': 'green'}]
      Routine stimulus
      Routine feedback
      Routine blank
    LoopTerminator trials
  LoopTerminator blocks
  Routine goodbye
